PsychoPy2experiment version="3.1.2"
Settings
  Enable Escape = False
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  color = $[-0.5,-0.5,-0.5]
  expName = FANCY_CARDS
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Routines
  Routine selection
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # Sitmuli downloaded from:
        # https://www.1001freedownloads.com/free-clipart/guyenne-classic-card-deck

        # A variable to choose whether to use eye tracking or not.
        # If it is left to False, mouse position will be used instead.
        expInfo["Eye Tracker"] = True

        # Defining the variable that will be used when controlling for gaze or mouse position.
        # Here we give it an initial value from mouse position
        dotPosition=mouse.getPos()

        # Here we define a function to convert Tobii's normalized coordinates to pixels
        # and change origin to center of screen, like PsychoPy does
        def norm2pix(point, win):
            if not np.isnan(point[0]):
                x = point[0] * win.size[0]
                y = point[1] * win.size[1]
                xAdj = x - (win.size[0] / 2)
                yAdj = (y * -1) + (win.size[1] / 2)
                return (xAdj, yAdj)
            else:
                return (np.nan, np.nan)

        # If eye tracker is to be used, we need to prepare a few things
        if expInfo['Eye Tracker']:
            # import tobii pro module
            import tobii_research as tr
            # turn off mouse visibility
            mouse.setVisible(0)
            # find eye trackers
            found_eyetrackers = []
            while len(found_eyetrackers) == 0:
                found_eyetrackers = tr.find_all_eyetrackers()
            # select first eye tracker
            my_eyetracker = found_eyetrackers[0]
            # create list in which we append gaze data
            gaze_list = []
            # create callback to get gaze data
            def gaze_data_callback(gaze_data):
                # append timestamp and gazePointLeft at callback
                gaze_list.append([gaze_data['system_time_stamp'],gaze_data['left_gaze_point_on_display_area']]) # left eye only
      Begin Routine:
        # If we are using eye tracking
        if expInfo['Eye Tracker']:
            # start getting live data from the eye tracker
            my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
        # create a list to collect position data when it is within one of the stimuli.
        # this will be reset everytime we look outside a stimulus
        gazeCount=[]
      Each Frame:
        # If we are using eye tracking
        if expInfo['Eye Tracker']:
            # if we have some gaze returned from the eye tracker
            if len(gaze_list) > 0:
                # get the last sample sent from eye tracker
                gpos = gaze_list[-1]
                # use our custom function to convert gaze coordinates to pixels and reset origin to center.
                dotPosition=norm2pix(gpos[1], win)
            # if we don't have gaze data
            else:
                # set position to na
                dotPosition = (np.nan, np.nan)
        # if we are not using eye tracking
        else:
            # get mouse position
            dotPosition = mouse.getPos()

        # if our position variable is not na
        if not np.isnan(dotPosition[0]):
            # check if it is within one of the images
            if CARD1.contains(dotPosition):
                gazeCount.append(dotPosition)
                imageName="image1"
            elif CARD2.contains(dotPosition):
                gazeCount.append(dotPosition)
                imageName="image2"
            elif CARD3.contains(dotPosition):
                gazeCount.append(dotPosition)
                imageName="image3"
            # if gaze is out of stimuli, reset collection list
            else:
                gazeCount=[]
        else:
            gazeCount=[]

        # if we collect 60 sample or more in the same stimuli
        if len(gazeCount)>=60:
            # set result image file name to the selected image
            selectedImage = "media" + os.sep + imageName+'.png'
            # stop selection routine and show result
            continueRoutine=False

        # check for quit (the Esc key)
        if event.getKeys(keyList=["escape"]):
            # if using eye tracking
            if expInfo['Eye Tracker']:
                # stop getting data from eye tracker
                my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
            win.close()
            core.quit()
      End Routine:
        # add the selected image to exported data
        trials.addData("Selected Image", selectedImage)
        # stop collecting data from eye tracker
        if expInfo['Eye Tracker']:
            my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
    ImageComponent CARD1
      image = media/image1.png
      pos = (-400, 0)
      size = (186, 289)
      startVal [time (s)] = 0.0
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    ImageComponent CARD2
      image = media/image2.png
      size = (186, 289)
      startVal [time (s)] = 0.0
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    ImageComponent CARD3
      image = media/image3.png
      pos = (400, 0)
      size = (186, 289)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos [set every frame] = $dotPosition
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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  Routine result
    TextComponent text
      letterHeight = 30
      pos = (0, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Your selection:
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    ImageComponent image
      image [set every repeat] = $selectedImage
      size = (186, 289)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine selection
    Routine result
  LoopTerminator trials
